# The OPC calcium model
# ODES
dCa/dt=fi*(Jip3+Jleak+Jryr-Jserca+Jsocc+Jncxca-Jpmca+Jl+Jt+Jp2x7_Ca+Jleak_ex)
dvolt/dt=(-Ileak-Isoc-Ik-Inak-Incx-Il-It-Ip2x7-Ileak_CaNa)/(Cm*sur)*100
dCer/dt=(-gamma*fe*(Jip3+Jleak+Jryr-Jserca))
dNa/dt=3*Jncxna-3*Jnak+(Narest-Na)/tetana+Jp2x7_Na+Jleak_Na
# dNa/dt=-3*Jncxna-3*Jnak+(Narest-Na)/tetana
dK/dt=2*Jnak+(Krest-K)/tetak+Jk-Jp2x7_K
# dK/dt=2*Jnak+(Krest-K)/tetak+Jk-Jp2x7_K+Jleak_Na

dh/dt=((hinf-h)/(1/(a2*((d_2*(IP3+d_1)/(IP3+d_3))+Ca))))
dw/dt=(winf-w)/(winf/kc)
dmL/dt=(barmL-mL)/taumL
dhL/dt=(barhL-hL)/tauhL
dmT/dt=(barmT-mT)/taumT
dhTf/dt=(barhT-hTf)/tauhTf

dD1/dt=(k1*D2-(3*k2*(10^(A))+H1)*D1)
dD2/dt=(3*k2*(10^(A))*D1+2*k3*D3+H2*C2-(k1+2*k4*(10^(A))+H3)*D2 )
dD3/dt=(2*k4*(10^(A))*D2+3*k5*D4+Hat2*Q1-(2*k3+k6*(10^(A)))*D3)
dD4/dt=(k6*(10^(A))*D3+H4*Q2-3*k5*D4)
dC1/dt=(H1*D1+k1*C2+L1*C4-3*k2*(10^(A))*C1)
dC2/dt=(H3*D2+3*k2*(10^(A))*C1+2*k3*Q1-(k1+2*k4*(10^(A))+H2)*C2)
dQ1/dt=(2*k4*(10^(A))*C2+3*k5*Q2-(2*k3+k6*(10^(A))+Hat2)*Q1)
dQ2/dt=(k6*(10^(A))*Q1+L2*Q3-(3*k5+L3+H4)*Q2)
dC4/dt=(k1*C3-(L1+3*k2*(10^(A)))*C4)
dC3/dt=(3*k2*(10^(A))*C4+2*k1*Q4-(k1+2*k2*(10^(A)))*C3)
dQ3/dt=(k2*(10^(A))*Q4+L3*Q2-(3*k1+L2)*Q3)

# Algebraic equations
Ileak_CaNa=gleakk*(volt-Vlk)
Jleak_Na = -(1-fleak)*alpha*Ileak_CaNa*10**3
Ileak=gleak*(volt-Vl)
Jleak_ex = v_ex_cyto * (Ca_ex - Ca)

minf=IP3/(IP3+d_1)
ninf=Ca/(Ca+d5)
Jip3=v_ip3*(minf^3)*(ninf^3)*(h^3)*(Cer-Ca)

Jleak=v2*(Cer-Ca)

Jryr=vr*w*(1+(Ca^3)/kb1)/(ka/(Ca^4)+1+(Ca^3)/kb1)*(Cer-Ca)

Jserca=v3*(Ca^hc3)/((k3serc^hc3)+(Ca^hc3))

alphaca=1/(2*Vosteo*F)
Eca=R*temp/(2*F)*log(cao/(Ca*10^(-3)))*10^3
# barvs=2*Vs/((-67-Eca)*alphaca)
Isoc=gsoc*(tanh(Cer-ksoc))/2*(volt-Eca)
Jsocc=-alphaca*Isoc

VFRT=volt*(10^(-3))*F/(R*temp)
Incx=(1/(1+((kn/Ca)^1.5)))*gncx*(exp(eta*VFRT)*(Na^3)*cao-exp((eta-1)*VFRT)*(nao^3)*Ca*1e-3)/(dncx+Na^3*cao+nao^3*Ca*10^(-3))
Jncxca=-alphaca*Incx*10^6

Jpmca=v_pmca*(Ca^2)/((Ca^2)+(k_pmca^2))

alpha=1/(Vosteo*F)
Il=gL*mL*hL*(volt-Eca)
Jl=-alpha*Il*10^6

It=gT*mT*hTf*(volt-Eca)
Jt=-alpha*It*10^6

hinf=(d_2*(IP3+d_1)/(IP3+d_3))/((d_2*(IP3+d_1)/(IP3+d_3))+Ca)
winf=(ka/(Ca^4)+1+(Ca^3)/kb)/(1/kc+ka/(Ca^4)+1+(Ca^3)/kb)

Jncxna=-alpha*Incx*10^3

Inak=gnak*Kout/(Kout+Knakko)*Na^1.5/(Na^1.5+Knakna^1.5)*(volt+135.1)/(volt+300)
Jnak=-alpha*Inak*10^3

Ek=R*temp/(F)*log(Kout/K)*10^3
Ik=gk*sqrt(Kout)*(volt-Ek)
Jk=-alpha*Ik*10^3

barmL=1/(1+exp(-volt/6))
taumL=(18*exp(-((volt+45)/20)^2)+10)/10

barhL=1/(1+exp(volt/5))
tauhL=(10*exp(-((volt+100)/10)^2)+20)/10

barmT=1/(1+exp(-(volt+5)/6))
taumT=exp(-((volt+5)/6)^2)+2

barhT=1/(1+exp((volt+5)/10))
tauhTf=exp(-((volt+5)/10)^2)+2

Q4=1-(D1+D2+D3+D4+C1+C2+Q1+Q2+C4+C3+Q3)
Ip2x7=barg_p2x7*(Q1+Q2+Q3+Q4)*volt
Jp2x7_Ca=-f_Ca*alphaca*Ip2x7*10^(6)
Jp2x7_Na=-f_Na*alpha*Ip2x7*10^(3)
Jp2x7_K=-f_K*alpha*Ip2x7*10^(3)

# Parameters
# new-old: gncx: 0.16 <-> 0.04, vl: -81 <-> 30, vlk:60 <-> 70
par A=-5.2 fleak=0 gsoc = 1 Ca_ex = 1500 v_ex_cyto = 0.000016
par a2=0.2 barg_p2x7=22.5
par cao=2.5 Cm=1
par d_1=0.13 d_2=1.049 d_3=0.9434 d5=0.08234 dncx=4 Delta=-0.031 eta=0.3
par F=96485.3321 f_Ca=0.046 f_K=0.477 f_Na=0.477 fe=0.05 fi=0.05
par gamma=9 gk=11.58 gL=0.8 gleak=1 gleakk=2 gT=0.5 gnak=-0.313888 gncx=0.16
par H1=0.001 H2=0.01 H3=0 H4=0.6 Hat2=0.1 hc3=2
par IP3=0.2 ip3base=0.2
par Jncx_bar=1
par ka=0.0192 kb=0.2573 kb1=0.2573 kc=0.0571 kca=5
par K0d_Nae=15.5 K0d_Nai=2.49 Kd=0.43 Kd_Ke=0.213 Kd_ki=0.5 Kd_Mgatp=2.51
par kmcai=0.0026 kmcao=1.3 kmnao=97.63 kmnai=12.3 kn=0.1 kna=5 Kout=4
par Knakko=1.32 Knakna=14.5 Kncxca=0.502 Ks=50
par k1=0.3 k1m=172.1 k1p=1050 k2=1260 k2m=40 k2p=481 k3=2.4
par k3m=79300 k3p=2000 k3serc=0.3 k4=1575 k4m=40 k4p=320
par k5=1.58 k6=221 k_pmca=0.8 ksoc=0.939 ksat=0.25 ktau=1 krest=120
par L1=0.0001 L2=0.004 L3=0.05
par MgADP=0.06 MgATP=4.99
par narest=12 nao=140 nH=2.55 nncxh=1.5
par P=96.4853321 Pca=35 PIa=4.95 Pk=30 Pna=1
par R=8.314
par Sm=0.000000025 sur=5000
par temp=300 tetak=10 tetana=10 tau_o=10 tau_soc=30
par VCa=100 Vl=-81 vlk=60 v2=0.5 v3=120
par v_ip3=0.88 v_pmca=0.6 vr=18 vncx=1.4 Vs=0.01252 Vosteo=6.5
par z=2

# Inital Conditons.
Ca(0)=0.121212
Cer(0)=25.898965426552827
h(0)=0.661
w(0)=0.6605
Na(0)=12.102
K(0)=117.07
volt(0)=-67.65327008405072
mL(0)=0
hL(0)=1
mT(0)=0
hTf(0)=1
D1(0)=0
D2(0)=0
D3(0)=0
D4(0)=0
C1(0)=1
C2(0)=0
C3(0)=0
C4(0)=0
Q1(0)=0
Q2(0)=0
Q3(0)=0


# Numerics
@ TOTAL=4000,DT=.01,xlo=0,xhi=4000,ylo=-3,yhi=3
@ NPLOT=1,XP1=t,YP1=Ca
@ MAXSTOR=10000000
@ BOUNDS=1000000
@ dsmin=1e-5,dsmax=0.05,parmin=-8,parmax=0,autoxmin=-8,autoxmax=1
@ autoymax=2,autoymin=0,Ntst=50,Nmax=20000,NPr=1000,Ds=0.001,Dsmin=1e-05,EPSL=1e-07,Dsmax=0.05,EPSS=1e-5,EPSU=1e-7

done